OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.1.0+git)
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "Cz;O1;O2"
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #3
  Decimation factor = 4
Data=#3, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false

0xc73e83ec Generic stream reader => #5
  Filename = C:/jl/p300-speller/signals/p300-train-[2016.02.10-16.25.33].ov
#5.Output stream 2 -> 0xc73e83ec Stimulation listener
  Log level to use = Information
