OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.1.0+git)
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Note that by default this scenario reads from a file
  included in the OpenViBE distribution. To use
  real data, change Generic Stream Reader to
  read from the file recorded in the previous scenario.

Generic stream reader => #0
  Filename = C:/jl/p300-speller/signals/p300-train-[2016.02.10-16.25.33].ov
#0.Output stream 2 -> Channel Selector
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #3
  Decimation factor = 4
#0.Output stream 3 -> Identity => #4
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#5.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #7
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching => #8
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#8.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #10
Stimulations=#4, Features for class 1=#7, Features for class 2=#10 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

0xc67a01dc Stream Switch
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_00
  Switch stim for output 2 = OVTK_StimulationId_Label_01
