OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.1.0+git)
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Note that by default this scenario reads from a file
  included in the OpenViBE distribution. To use
  real data, change Generic Stream Reader to
  read from the file recorded in the previous scenario,
  or switch from file reader to the acquisition client.
Comment
  Switch from file reader
  to Acquisiton client to use it online

Launch
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 20
-> P300 Speller Stimulator => #1
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = 12
  Number of trials = 10
  Flash duration (in sec) = 0.200000
  No flash duration (in sec) = 0.100000
  Inter-repetition delay (in sec) = 1.000000
  Inter-trial delay (in sec) = 3.000000
  Avoid neighbor flashing = false
-> Target Letter Generation => #2
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-target.lua
  Word to Spell (leave this empty if random) =
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 2
Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#3.Experiment information, Input stream 2=#3.Signal stream, Input stream 3=#3.Stimulations -> Identity => #4
#4.Output stream 2 -> Channel Selector
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #7
  Decimation factor = 4
Input signal=#7, Input stimulations=#4.Output stream 3 -> Stimulation based epoching => #8
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
#8.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator
-> Classifier processor => #11
  Filename to load configuration from = ${Player_ScenarioDirectory}/p300-classifier.cfg
New input[0]=#11.Labels, New input[1]=#4.Output stream 3 -> P300 accumulator => #12
  Lua Script = ${Player_ScenarioDirectory}/p300-speller-accumulator.lua
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Segment start = OVTK_StimulationId_TrialStart
  Segment stop = OVTK_StimulationId_TrialStop
Sequence stimulations=#1, Target stimulations=#2, Row selection stimulations=#12.Stimulations, Column selection stimulations=#12.New output -> P300 Speller Visualisation
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-speller-visualisation.cfg
#12.Stimulations -> 0xc73e83ec Stimulation listener "A"
  Log level to use = Information
#12.New output -> 0xc73e83ec Stimulation listener "B"
  Log level to use = Information
Input stream 1=#4.Output stream 1, Input stream 2=#4.Output stream 2, Input stream 3=#4.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-online-[$core{date}-$core{time}].ov
  Use compression = false
#3.Stimulations -> 0xc67a01dc Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
