OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE, CreatorVersion=1.2.2+git)
0x790d75b8 = Jussi T. Lindgren, Jozef Legeny
0x8c1fc55b = 1.0
0x9f5c4075 = SSVEP CSP Training
0xf36a1567 = http://openvibe.inria.fr/using-the-ssvep-mind-shooter-scenarios/
0xf6b2e3fa = SSVEP
0xf8034a49 = Inria
Comment
  This scenario trains a CSP filter bank
  using the recorded signal
Comment
  Split the signal to bands of interest
Comment
  Route signal depending on user focus condition
Comment
  Estimate multiclass CSP filters

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-current.ov
#0.Output stream 2 -> Channel Selector "!99" => #1
  Channel List = 99
  Action = Reject
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
#2.Output stream 1 -> Temporal filter "Frequency 1 (base)" => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9.75
  High cut frequency (Hz) = 10.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1b.cfg
#2.Output stream 1 -> Temporal filter "Frequency 1 (1st harmonic)" => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
#2.Output stream 1 -> Temporal filter "Frequency 2 (base)" => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11.75
  High cut frequency (Hz) = 12.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2b.cfg
#2.Output stream 1 -> Temporal filter "Frequency 2 (1st harmonic)" => #6
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 23.75
  High cut frequency (Hz) = 24.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
#2.Output stream 1 -> Temporal filter "Frequency 3 (base)" => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3b.cfg
#2.Output stream 1 -> Temporal filter "Frequency 3 (1st harmonic)" => #8
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.75
  High cut frequency (Hz) = 30.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
Input 1=#3, Input 2=#4, Input 3=#5, Input 4=#6, Input 5=#7, Input 6=#8 -> Signal Merger => #9
#2.Output stream 2 -> Identity => #10
Input signal=#9, Input stimulations=#10 -> Stimulation based epoching "SBE" => #11
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Triggers=#10, Matrix=#11 -> Stream Switch => #12
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_00
  Switch stim for output 2 = OVTK_StimulationId_Label_01
  Switch stim for output 3 = OVTK_StimulationId_Label_02
  Switch stim for output 4 = OVTK_StimulationId_Label_03
Stimulations=#10, Signal condition 1=#12.Output[0], Signal condition 2=#12.Output[1], Signal condition 3=#12.New output[2], Signal condition 4=#12.New output[3] -> Regularized CSP Trainer
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-filters.cfg
  Filter dimension = 2
  Save filters as box config = false
  Covariance update = Chunk average
  Trace normalization = true
  Shrinkage coefficient = 0.0
  Tikhonov coefficient = 0.0
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/regularized-csp-trainer.cfg
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
