OpenViBE-Scenario
0x9f5c4075 = OpenViBE to VRPN tutorial
0xf36a1567 = http://openvibe.inria.fr/vrpn-tutorial-sending-data-from-openvibe-to-an-external-application/
0xf6b2e3fa = Examples
0xf8034a49 = Inria
Comment
  This scenario shows how to send data out from Designer to a TCP/IP client

  Its used together with openvibe-examples-openvibe-to-tcpip application.

Sinus oscillator => #0
  Channel count = 5
  Sampling frequency = 256
  Generated epoch sample count = 32
-> Signal to TCP/IP
  Port = 5678
  Stimulus output = Raw
Keyboard stimulator => #2
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Signal=#0, Stimulations=#2 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#2 -> Stimuli to TCP/IP
  Port = 5679
  Stimulus output = String
