OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 2
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Signals
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
#0.Stimulations -> 0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = false
  Number of values in expanded blocks = 4
#0.Stimulations -> Stimulation listener "Stims"
  Log level to use = Information
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

0x341d3912 Clock stimulator
  Interstimulation interval (in sec) = 2.0
  Stimulation = OVTK_StimulationId_Label_00

0x341d3912 HelloWorld
  Frequency (Hz) = 1.0
  My greeting = Hello World!
