OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Unsupervised P300
0xf36a1567 = http://openvibe.inria.fr/openvibe-unsupervised-p300/
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  classifiers is trained.

  The Target Letter Generation
  box still proposes some targets in order to
  eventually train the classifier
  again, but you may want to disconnect that box
  in order to have a real free time use of
  the speller.

  The flash sequence starts automatically after 20 sec.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. The detected
  letter will be presented in green. This will be repeated
  10 times.

  If the performance of the system does not fit your
  requirements, just run 2-train-classifier
  scenario again on the data you just recorded.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #1
#1.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Resampling => #3
  New Sampling Frequency = 100
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
Input signal=#3, Input stimulations=#1.Output stream 3 -> Stimulation based epoching => #4
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = -0.2
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2, Input stream 3=#1.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/p300-unsupervised-[$core{date}-$core{time}].ov
  Use compression = false
#1.Output stream 3 -> 0x341d3912 Stimulation listener
  Log level to use = Information
#1.Output stream 3 -> Identity
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
Groups => #9
  Filename = ${Player_ScenarioDirectory}/signals/02-stimuli.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
Sequence => #10
  Filename = ${Player_ScenarioDirectory}/signals/03-sequence.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
Signal input=#4, Group=#9, Sequence=#10 -> P300 classifier => #11
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2014a/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = p300_Initialize
  Process function = p300_Process
  Uninitialize function = p300_Uninitialize
  Zero trigger = OVTK_StimulationId_Label_01
-> 0x341d3912 Stimulation listener "Predictions"
  Log level to use = Information
P300 timeline => #13
  Lua Script = ${Player_ScenarioDirectory}/timeline_p300.lua
  Number of letters to spell = 10
  Flashes per letter = 8
  Flash duration = 0.1
  Text to spell = quick_brown fox
Flash patterns=#9, Timeline=#13, Selection stimulations=#11 -> P300 Speller Visualisation II
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller-hash.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_08
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 75
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 75
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 75
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 75
