OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Unsupervised P300
0xf36a1567 = http://openvibe.inria.fr/openvibe-unsupervised-p300/
0xf8034a49 = Inria
Comment
  Tests classifier
  with epoched, prerecorded data

Epoched data => #0
  Filename = ${Player_ScenarioDirectory}/signals-test/01-epoched-data.csv
Flash groups => #1
  Filename = ${Player_ScenarioDirectory}/signals-test/03-groups.csv
Group Types => #2
  Filename = ${Player_ScenarioDirectory}/signals-test/04-sequence.csv
#2.Output stream -> 0x341d3912 EBML stream spy
  EBML nodes description = ${Path_Data}/plugins/tools/config-ebml-stream-spy.txt
  Log level to use = Information
  Expand binary blocks = true
  Number of values in expanded blocks = 4
Signal input=#0.Output stream, Trigger=#1.Output stream, New input=#2.Output stream -> P300 classifier
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2014a/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = p300_Initialize
  Process function = p300_Process
  Uninitialize function = p300_Uninitialize
  Flashes per trial = 68
  Enable debug = true
-> 0x341d3912 Stimulation listener
  Log level to use = Information
