OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Unsupervised P300
0xf36a1567 = http://openvibe.inria.fr/openvibe-unsupervised-p300/
0xf8034a49 = Inria
Comment
  Currently the flash groups and the
  group type sequence are always the
  same and read from premade files.
Comment
  This LUA script creates the sequence
  of events that happen during the
  scenario.
Comment
  The visualizer sends the events on the P300 timeline
  to the Acquisition Server using Software Tagging
  (TCP Tagging) after rendering them

Groups => #0
  Filename = ${Player_ScenarioDirectory}/unsupervised-p300-example-groups.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
P300 timeline => #1
  Lua Script = ${Player_ScenarioDirectory}/timeline_p300.lua
  Number of letters to spell = 10
  Flashes per letter = 68
  Flash duration = 0.1
  Text to spell = quick_brown fox
Flash patterns=#0, Timeline=#1 -> P300 Speller Visualisation II
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-speller-hash.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_08
  Flash background color = 10,10,10
  Flash foreground color = 100,100,100
  Flash font size = 75
  No flash background color = 0,0,0
  No flash foreground color = 50,50,50
  No flash font size = 75
  Target background color = 10,40,10
  Target foreground color = 60,100,60
  Target font size = 75
  Selected background color = 70,20,20
  Selected foreground color = 30,10,10
  Selected font size = 75
#1 -> 0x341d3912 Stimulation listener "Orig. Timeline"
  Log level to use = Information

Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#4.Experiment information, Input stream 2=#4.Signal stream, Input stream 3=#4.Stimulations -> Identity => #5
#5.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
#5.Output stream 3 -> 0x341d3912 Stimulation listener "AS Timeline"
  Log level to use = Information
