OpenViBE-Scenario
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = ICA example
0xf8034a49 = Inria
Comment
  ICA decomposition example

  The scenario produces uniform random noise
  signal and a low-frequency sine wave signal.
  These are combined as a+b and a-b to form
  two mixed channels.

  This signal is then decomposed by FastICA.

  The ICA box processes each chunk independently,
  so even though it is able to separate the signals,
  the noise and the signal channels may alternate
  in the output.
Comment
  Note that the ICA will output the
  channels as-are before the model is
  estimated (after specified number
  of seconds). If you wish to decompose
  your whole signal, store the decomposition
  matrix from the ICA and use it in another
  scenario with the spatial filter box.

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP => #1
  Equation = sin(a*M_PI)
Noise generator => #2
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input - A=#1, Input - B=#2 -> Simple DSP => #3
  Equation = a-b
Input 1=#1, Input 2=#2 -> Signal Merger => #4
Data=#4 -> Signal display "Original signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input - A=#1, Input - B=#2 -> Simple DSP => #6
  Equation = a+b
Input 1=#6, Input 2=#3 -> Signal Merger => #7
-> 0xc67a01dc Independent Component Analysis (FastICA) => #8
  Number of independent components to extract = 2
  Set sample size (seconds) for FastICA = 10
  Decomposition type, 0==deflation, 1==symmetric = 1
  Max number of reps for the ICA convergence = 100000
  Set Fine tuning = true
  Max number of reps for the fine tuning = 100
  Non linearity (10: POW3, 20: TANH, 30: GAUSS) = 20
  Set internal Mu parameter for FastICA = 1.0
  Set Epsilon parameter for FastICA = 0.0001
  Spatial filter filename =
  Save the spatial filter/demixing matrix = false
Data=#8 -> Signal display "Separated signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#7 -> Signal display "Mixed signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
