OpenViBE-Scenario
Comment
  This scenario shows the message capabilies. Box can exchange messages
Comment
  You can modify the frequency
  at which the MessageSender
  box sends messages
Comment
  You can add, remove and change
  the names of message inputs
  on the MessageReceiver box
  and of message outputs on the
  MessageSender box. Right click
  on a box to access the menu
Comment
  You can add settings as long as
  they are integers floats or strings.
  If you change an existing setting
  to a type different from those
  mentionned, the setting will be
  removed. Those settings will be
  used to fill the message.
Comment
  MessageReceiver will print
  the content of the message
  in the console.

0xc67a01dc Message Sender => #0
  Frequency = 1
  Append test matrix = true
  Meaning of life = 42
  Another number = 502
  Pi = 3.1415
  Quote = Thank you for all the fish
MessageLink=#0 -> Message Receiver
  LogLevel = Information
