OpenViBE-Scenario
0x790d75b8 = Joao-Pedro Berti-Ligabo
0x9f5c4075 = EOG: Run
0xf8034a49 = Inria
Comment
  This scenario estimates a denoising regressor
  following the work of Schlögl and al., 2007.

  Here, EOG Denoising Calibration estimates
  the model using a more contaminated signal in the EOG
  input and the rest (EEG signal) in the EEG input.

  Press 'a' to in Keyboard Stimulator to start the
  model estimation. Press 'u' to stop. The model is
  output after the whole input has been processed.

  After the model has been estimated, it can be
  used with the 'eog-run.xml' scenario.

GDF file reader => #0
  Filename = ${Path_Samples}/signals/eog-artifact.gdf
  Samples per buffer = 32
  Subtract physical minimum = False
#0.EEG stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Channel Selector "EEG" => #2
  Channel List = 1:4
  Action = Reject
  Channel Matching Method = Smart
Signal=#2 -> Signal display "EEG"
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#1 -> Channel Selector "EOG" => #4
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
Signal=#4 -> Signal display "EOG"
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Keyboard stimulator => #6
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
EEG=#2, EOG=#4, Stimulations=#6 -> EOG_Denoising_Calibration
  Filename b Matrix = ${Player_ScenarioDirectory}/b-Matrix-EEG.cfg
  Train Trigger = OVTK_GDF_End_Of_Session
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
