OpenViBE-Scenario
0x790d75b8 = Joao-Pedro Berti-Ligabo
0x9f5c4075 = EOG: Calibration
0xf8034a49 = Inria
Comment
  This scenario performs denoising following
  the work of Schlögl and al., 2007.

  The model should be first calibrated using
  the 'eog-calibration.xml' scenario.

  EOG Denoising box uses the estimated model
  and attempts to clean the EEG input of artifacts.

GDF file reader => #0
  Filename = ${Path_Samples}/signals/eog-artifact.gdf
  Samples per buffer = 32
  Subtract physical minimum = False
#0.EEG stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 2
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Channel Selector "EOG" => #2
  Channel List = 1:4
  Action = Select
  Channel Matching Method = Smart
#1 -> Channel Selector "EEG" => #3
  Channel List = 1:4
  Action = Reject
  Channel Matching Method = Smart
EEG=#3, EOG=#2 -> EOG Denoising => #4
  Filename b Matrix = ${Player_ScenarioDirectory}/b-Matrix-EEG.cfg
Signal=#4 -> Signal display "After"
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#3 -> Signal display "Before"
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
