OpenViBE-Scenario
Comment
  The Hilbert transform computes Hilbert transform,
  instantaneous phase and envelope on input signal
  using analytic signal representation
Comment
  The Time signal is a sample box
  that generates a constant increasing signal
Comment
  The Simple DSP box is used to
  create a modulated signal
Comment
  Compute Hilbert transform
  on the modulated signal
Comment
  Display results
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP "cos(100*x)*(4*cos(2*x)-sin(3*x))" => #1
  Equation = cos(100*x)*(4*cos(2*x)-sin(3*x))
Signal=#1 -> Signal display "Display modulated signal"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#1 -> Hilbert Transform => #3
Signal=#3.Hilbert Transform -> Signal display "Hilbert Signal"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#3.Envelope -> Signal display "Envelope"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#3.Phase -> Signal display "Phase"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
