OpenViBE-Scenario
0x790d75b8 = Joao-Pedro Berti-Ligabo
0x9f5c4075 = Wavelet example
0xf8034a49 = Inria
Comment
  Wavelet decomposition example

  The scenario produces uniform random noise
  signal which rides on a low-frequency sine-wave
  carrier.

  This signal is decomposed and then reconstructed
  by Discrete Wavelet Transform
  and Inverse DWT boxes.

  Observing the outputs A and D shows that the
  low-frequency part A is now more clean of the
  random noise, some of which is carried now
  in the high-frequency part D. The reconstructed
  signal should closely resemble the original one.

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
Noise generator => #1
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input - A=#0, Input - B=#1 -> Simple DSP => #2
  Equation = sin(a*M_PI)+b-0.5
-> Discrete Wavelet Transform => #3
  Wavelet type = haar
  Wavelet decomposition levels = 1
Info=#3.Info, A=#3.A, D1=#3.D1 -> Inverse DWT => #4
  Wavelet type = haar
  Wavelet decomposition levels = 1
Signal=#4 -> Signal display "Reconstruction"
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 500
Signal=#3.A -> Signal display "A"
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 300
Signal=#3.D1 -> Signal display "D"
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 300
Signal=#2 -> 0xc67a01dc Signal display "Original signal"
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 500
