OpenViBE-Scenario(FormatVersion=1, Creator=openvibe, CreatorVersion=2.0)
Comment
  The Lua Stimulator box delays muxes the stimulations
  from the Clock Stimulator and the Keyboard Stimulator
  boxes. Each muxed stimulation is delayed by 5 seconds.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Time signal => #0
  Sampling frequency = 512
  Generated epoch sample count = 32
Clock stimulator => #1
  Interstimulation interval (in sec) = 1.0
  Stimulation = OVTK_StimulationId_Label_00
Keyboard stimulator => #2
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
New input[0]=#1, New input[1]=#2 -> Mux + 5s delay => #3
  Lua Script = ${Player_ScenarioDirectory}/scripts/sample-lua-script.lua
Data=#0, Stimulations=#3 -> 0xc67a01dc Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 1
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
